PsychoPy2experiment version="2023.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = RIGHT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = fixed_dot-16_grid_T1w
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
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Routines
  Routine dots
    PolygonComponent dot
      fillColor = 0.5000, 0.5000, 0.5000
      lineColor = 0.5, 0.5, 0.5
      nVertices = 128
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        grid_size = 4  # 4x4 grid
        dot_size = 0.05  # Size of the grey dot
        positions = []  # List of grid positions
        # Calculate grid positions
        for i in range(grid_size):
            for j in range(grid_size):
                x = -0.75 + i * 0.5  # Adjust the range of x coordinates
                y = -0.75 + j * 0.5  # Adjust the range of y coordinates
                positions.append((x, y))
        shuffle(positions)  # Shuffle the positions
      Begin Routine:
        # Begin Routine
        current_position_index = 0  # Start with the first position
        total_positions = len(positions)  # Track the total number of positions
        ioServer.getDevice('tracker').sendMessage("ET: Start routine 'dots'")
      Each Frame:
        # Each Frame
        if current_position_index < total_positions:  # Ensure the index is within bounds
            if t >= current_position_index * 3:  # Check if enough time has passed
                dot.pos = positions[current_position_index]  # Update the dot position
                current_position_index += 1  # Move to the next position
                ioServer.getDevice('tracker').sendMessage("ET: dot moved!")
        else:
            continueRoutine = False  # End the routine when all positions have been shown
  Routine start_ET
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Send logs to the ET
        def send_message(message, addr="localhost", port=2023):
            client_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            client_socket.connect((addr, port))
            client_socket.sendall(message)
            client_socket.close()
      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("ET: recording started")
  Routine end
    TextComponent text
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      text = End press 't'
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    EyetrackerRecordComponent ET_stop
      actionType = Stop Only
      stopVal [time (s)] = 1.0
      syncScreenRefresh = True
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    KeyboardComponent key_resp_3
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.getDevice('tracker').sendMessage("ET: eye-tracker stopped")
  Routine trail
    TextComponent waiting_trigger
      letterHeight = 0.12
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = The program is ready for the scanner trigger. Press 's' to proceed manually.
      wrapWidth = 1.7
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    KeyboardComponent key_resp
      allowedKeys = ['s']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent fix_desc
      letterHeight = 0.12
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = In this task you will see a dot moving randomly within 16 different positions on the screen. You have to follow the dot :)
      wrapWidth = 1
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  Routine centered_dot
    PolygonComponent dot_centered
      fillColor = 0.5000, 0.5000, 0.5000
      lineColor = 0.5000, 0.5000, 0.5000
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  EyetrackerCalibrationRoutine calibration_2
    borderColor = 0.5, 0.5, 0.5
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = 0.5, 0.5, 0.5
    innerBorderColor = 0.5, 0.5, 0.5
    innerBorderWidth = 2
    innerFillColor = 0.5, 0.5, 0.5
    innerRadius = 0.07
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.15
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration_2
  Routine trail
  Routine start_ET
  Routine centered_dot
  LoopInitiator T1w_LIBRE loopType="TrialHandler"
    loopType = random
    nReps = 16
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    Routine dots
  LoopTerminator T1w_LIBRE
  Routine centered_dot
  Routine end
